<CompuCell3D Revision="5" Version="4.7.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
      <MCSConversionFactor DisplayName="No conversion" Units="-">1.0</MCSConversionFactor>
      <VoxelConversionFactor DisplayName="No conversion" Units="-">1.0</VoxelConversionFactor>
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="150" y="150" z="1"/>
      <Steps>1000</Steps>
      <Temperature>3.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Tumour"/>
      
      <CellType TypeId="2" TypeName="CAF"/>
      <CellType TypeId="3" TypeName="Activated_CAF"/>
      
      <CellType TypeId="4" TypeName="CD8T"/>

   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">15.0</Energy>
      <Energy Type1="Medium" Type2="Tumour">15.0</Energy>
      <Energy Type1="Medium" Type2="CAF">15.0</Energy>
      <Energy Type1="Medium" Type2="Activated_CAF">15.0</Energy>
      <Energy Type1="Medium" Type2="CD8T">15.0</Energy>
      <Energy Type1="Tumour" Type2="Tumour">2.0</Energy>
      <Energy Type1="Tumour" Type2="CAF">8.0</Energy>
      <Energy Type1="Tumour" Type2="Activated_CAF">8.0</Energy>
      <Energy Type1="Tumour" Type2="CD8T">2.0</Energy>
      <Energy Type1="CAF" Type2="CAF">15.0</Energy>
      <Energy Type1="CAF" Type2="Activated_CAF">15.0</Energy>
      <Energy Type1="CAF" Type2="CD8T">15.0</Energy>
      <Energy Type1="CD8T" Type2="CD8T">15.0</Energy>
      <Energy Type1="CD8T" Type2="Activated_CAF">15.0</Energy>
      <Energy Type1="Activated_CAF" Type2="Activated_CAF">15.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   
   
   <Plugin Name="FocalPointPlasticity">
      
      <!-- Specification of focal point junctions -->
      <!-- We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification -->
      <!-- To modify FPP links individually for each cell pair uncomment line below -->
      <!-- <Local/> -->
      <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level -->
      <!-- See CC3D manual for details on FPP plugin  -->      
      
      <Parameters Type1="Tumour" Type2="Tumour">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="Tumour" Type2="CAF">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="Tumour" Type2="Activated_CAF">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="Tumour" Type2="CD8T">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="CAF" Type2="CAF">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="CAF" Type2="Activated_CAF">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="CAF" Type2="CD8T">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>

      <Parameters Type1="Activated_CAF" Type2="Activated_CAF">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="Activated_CAF" Type2="CD8T">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>

      <Parameters Type1="CD8T" Type2="CD8T">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <NeighborOrder>1</NeighborOrder>     
      
   </Plugin>
   
   
   <Plugin Name="ConnectivityGlobal">
      
      <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
      <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
      <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
      <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
      <!-- To turn off precheck uncomment line below -->
      <!-- <DoNotPrecheckConnectivity/> -->
      <Penalty Type="Tumour">1000000</Penalty>
      <Penalty Type="CAF">1000000</Penalty>
      <Penalty Type="Activated_CAF">1000000</Penalty>
      <Penalty Type="CD8T">1000000</Penalty>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="IFN_Gamma">
         <DiffusionData>
            <FieldName>IFN_Gamma</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0001</GlobalDecayConstant>
            <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DiffusionSolverFE all secretion constants are scaled automatically to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Tumour">0.1</Secretion> -->
            <!-- <Secretion Type="CAF">0.1</Secretion> -->
            <!-- <Secretion Type="CD8T">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Tumour,CAF,CD8T" Type="CD8T">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="CD8T">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
      
      <DiffusionField Name="TGF_Beta">
         <DiffusionData>
            <FieldName>TGF_Beta</FieldName>
            <GlobalDiffusionConstant>0.3</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0001</GlobalDecayConstant>
            <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DiffusionSolverFE all secretion constants are scaled automatically to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="Tumour">0.1</Secretion>
            <Secretion Type="CAF">0.1</Secretion>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
      
      <DiffusionField Name="Collagen">
         <DiffusionData>
            <FieldName>Collagen</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0001</GlobalDecayConstant>
            <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
         </DiffusionData>
         <SecretionData>
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Tumour">0.1</Secretion> -->
            <!-- <Secretion Type="CAF">0.1</Secretion> -->
            <!-- <Secretion Type="CD8T">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Tumour,CAF,CD8T" Type="CD8T">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="CD8T">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
   </Steppable>
   
   <Plugin Name="ExternalPotential"/>
   
   <Steppable Type="UniformInitializer">
   
      <Region>
         <BoxMin x="60" y="60" z="0"/>
         <BoxMax x="90" y="90" z="1"/>
         <Gap>6</Gap>
         <Width>3</Width>
         <Types>CAF</Types>
      </Region>
      
      <Region>
         <BoxMin x="65" y="65" z="0"/>
         <BoxMax x="85" y="85" z="1"/>
         <Gap>0</Gap>
         <Width>3</Width>
         <Types>Tumour</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="150" y="150" z="1"/>
         <Gap>20</Gap>
         <Width>3</Width>
         <Types>CD8T</Types>
      </Region>
      
      
   </Steppable>
</CompuCell3D>
